<CompuCell3D Revision="0" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <!-- Lumen -->
      <CellType TypeId="1" TypeName="LUM"/>
      <!-- Epithelial -->
      <CellType TypeId="2" TypeName="EPI"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="NeighborTracker">
   
        <!-- Module tracking neighboring cells of each cell -->
    </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="LUM">800.0</Energy>
      <Energy Type1="Medium" Type2="EPI">70.0</Energy>
      <Energy Type1="LUM" Type2="LUM">10.0</Energy>
      <Energy Type1="LUM" Type2="EPI">10.0</Energy>
      <Energy Type1="EPI" Type2="EPI">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="GlobalBoundaryPixelTracker">
    <NeighborOrder>1</NeighborOrder>
  </Plugin>
  
   
   

    <Plugin Name="PixelTracker">
    <!-- Module tracking pixels of each cell --> 
    </Plugin>
   

   
   <Steppable Type="UniformInitializer">
      
      <Region>
         <BoxMin x="120" y="120" z="0"/>
         <BoxMax x="129" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>LUM</Types>
      </Region>
      <Region>
         <BoxMin x="120" y="130" z="0"/>
         <BoxMax x="129" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>EPI</Types>
      </Region>
   </Steppable>
</CompuCell3D>